CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Load the images by matching files in the folder against the unique text pattern for each stain: d0.tif for nuclei, d1.tif for the PH3 image, d2.tif for the cell stain image. The three images together comprise an image set.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "c2")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "segmentation")
    Name to assign these images:Segmentation
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c1")
    Name to assign these images:RFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c3")
    Name to assign these images:LipidTOX
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the nuclei from the nuclear stain image. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):9,70
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:700
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:6|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notes:['Identify the cells by using the nuclei as a "seed" region, then growing outwards until stopped by the image threshold or by a neighbor. The Propagation method is used to delineate the boundary between neighboring cells.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:Segmentation
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:0.3
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
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
MeasureObjectSizeShape:[module_num:7|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
    Select objects to measure:Cells
    Calculate the Zernike features?:Yes

MeasureObjectIntensity:[module_num:8|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
    Hidden:3
    Select an image to measure:DAPI
    Select an image to measure:LipidTOX
    Select an image to measure:RFP
    Select objects to measure:Nuclei
    Select objects to measure:Cells

MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ConvertObjectsToImage:[module_num:10|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
    Select the input objects:Cells
    Name the output image:CellImage
    Select the color format:uint16
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:Single name
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    Enter single file name:Labelled_cells
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    Saved file format:tiff
    Output file location:Default Output Folder|F:\\\\\\\\Experiments\\\\\\\\20190428_MH_cc_RFP_segmentation_test\\\\\\\\10_1_88k_CC_FA\\\\\\\\CP_tests
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:12|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notes:["Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv's."]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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|D:\\\\\\\\Experiments\\\\\\\\20170312_LR_Hepa_DAN10_att30_40x40_150x150\\\\\\\\Analysis\\\\\\\\CellProfilerAnalysis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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